PsychoPy2experiment version="1.84.1"
Settings
  Monitor = testMonitor
  color = $[1, 1, 1]
  Experiment info = {u'participant': u'9999', u'num_pract': u'20', u'ef_conn': u'1', u'run_debug': u'0', u'g_conn': u'1', u'type': u'1', u'pic_eval': u'1'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [860, 640]
  Full-screen window = False
  Save csv file = True
  Save log file = False
  expName = psreff3
  Screen = 1
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Routines
  Routine supl_jui
    CodeComponent code_13
      Begin Routine:
        pump = current_pump # fetches information on a random pump it will take
                            # randomly takes one of the first three pumps
        # sends pump vol | the initial amount should be set at 1ml


        #dev.write(pump)
        # after it sends, it should wait a bit
        #time.sleep(1)
    TextComponent text_4
      text [set every repeat] = $pump
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine iti
    CodeComponent code_3
      Begin Routine:
        curr_t = min(3.8, max(0.6, random.gauss(1, 0.5)))

        # denotes current first trial num of a new vector of questions
        # following each trial
        sub_trial = 1
    TextComponent cross_sign
      text = +
      stopVal [duration (s)] = $curr_t
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine ev_feed
    CodeComponent code_7
      Begin Routine:
        if ev_resp.keys == '1':
            opt_1 = [1, 0.84, 0.0]
            opt_2, opt_3, opt_4, opt_5, opt_6 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]

        elif ev_resp.keys == '2':
            opt_2 = [1, 0.84, 0.0]
            opt_1, opt_3, opt_4, opt_5, opt_6 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]

        elif ev_resp.keys == '3':
            opt_3 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_4, opt_5, opt_6 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]

        elif ev_resp.keys == '4':
            opt_4 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_3, opt_5, opt_6 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]

        elif ev_resp.keys == '5':
            opt_5 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_3, opt_4, opt_6 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]

        elif ev_resp.keys == '6':
            opt_6 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_3, opt_4, opt_5 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]

        stor_ev[str(sub_trial)] = [q_id, int(ev_resp.keys), ev_resp.rt]
      End Routine:
        # run_ev, run_effort, run_stroop
        #if type == 1:
        #    abs_trial += 1
        if type == 2:
            run_ev, run_flanker, run_effort, run_rew = 0, 1, 0, 0
        elif type == 3:
            run_effort, run_ev, run_flanker, run_rew = 0, 0, 1, 0
        elif type == 4:
            run_effort, run_flanker, run_ev, run_rew = 0, 0, 0, 1

            abs_trial += 1
            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1


        elif type == 5:
            run_flanker, run_ev, run_effort, run_rew = 0, 0, 1, 0
        elif type == 6:
            run_flanker, run_effort, run_ev, run_rew = 0, 0, 0, 1

            abs_trial += 1
            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1




        # for EV our data structure looks like this:
        # 'trial':[question_id, response, rt]


        sub_trial += 1
    PolygonComponent first_feedback
      fillColor [set every repeat] = $opt_1
      stopVal [duration (s)] = 0.5
      pos = [-0.8, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent second_feedback
      fillColor [set every repeat] = $opt_2
      stopVal [duration (s)] = 0.5
      pos = [-0.5, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent third_feedback
      fillColor [set every repeat] = $opt_3
      stopVal [duration (s)] = 0.5
      pos = [-0.2, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fourth_feedback
      fillColor [set every repeat] = $opt_4
      stopVal [duration (s)] = 0.5
      pos = [0.1, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fifth_feedback
      fillColor [set every repeat] = $opt_5
      stopVal [duration (s)] = 0.5
      pos = [0.4, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent sixth_feedback
      fillColor [set every repeat] = $opt_6
      stopVal [duration (s)] = 0.5
      pos = (0.7, -0.6)
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    TextComponent text_17
      text = 1
      stopVal [duration (s)] = 0.5
      pos = [-0.8, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_18
      text = 2
      stopVal [duration (s)] = 0.5
      pos = [-0.5, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_19
      text = 3
      stopVal [duration (s)] = 0.5
      pos = [-0.2, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_20
      text = 4
      stopVal [duration (s)] = 0.5
      pos = [0.1, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_21
      text = 5
      stopVal [duration (s)] = 0.5
      pos = [0.4, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_46
      text = 6
      stopVal [duration (s)] = 0.5
      pos = [0.7,  -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine eval_pic
    CodeComponent code_17
      Begin Routine:
        # this is the question it randomly pulls from the .csv file
        pic_q = current_question

        # this is added because by having an id of the question
        # where the questions are randomised, we can simply store it
        # later
        q_id = sav_mapping
      End Routine:
        stor_pic_q.append(rating.getRating())
    RatingScaleComponent rating_2
      labels = Very much, not at all
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
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    ImageComponent image_2
      startVal [time (s)] = 0.0
      image [set every repeat] = $pic_q
      size = (0.5, 0.5)
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    TextComponent text_49
      text = How much do you like this picture
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ev_save
    CodeComponent code_11
      Begin Routine:
        # we sort and order the keys because they correspond to the trials

        # saves to participant file
        save_to_file(dataset, curr_reward, stor_ev, abs_trial, stor_eff, stor_main, stor_gust, [4, 6])
  Routine prac_ann
    TextComponent text_8
      wrapWidth = 0.8
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        First a series of practice trials
        will follow to familiarise you with this game!
    TextComponent text_10
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr1
    KeyboardComponent instr1_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Begin Experiment:
        import random, os, serial, time, collections

        ################################################
        ########### defining basic variables ###########
        ################################################

        # define colours used in the questions






        opt_1, opt_2, opt_3, opt_4, opt_5, opt_6 = [0.2, 0.2, 0.2], \
                                                   [0.2, 0.2, 0.2], \
                                                   [0.2, 0.2, 0.2], \
                                                   [0.2, 0.2, 0.2], \
                                                   [0.2, 0.2, 0.2], \
                                                   [0.2, 0.2, 0.2]



        # feedback color, may not be used in the future
        feed_col = [-1, -1, -1]

        # absolute trial counter; including practice trials
        abs_trial = 1

        # used to run either practice or real trials
        run_prac = 1
        run_real = 0


        # needs to be stored
        # - ev response and RT
        # - stroop response and RT
        # - squeeze data, will be added later


        # storage containers
        stor_ev = {}
        stor_eff = {}
        stor_main = {}
        pump_vol = {} # this gives us a clear mapping between volume and commands to send
        stor_gust = {}
        stor_init_q = []
        stor_pic_q = []
        stor_jui_eval = collections.defaultdict()

        ################################################
        ########### pump related information ###########
        ################################################

        # clear mapping to make sure we know how much to send

        pump_selecter = ['\13', '\14', '\15', '\16']
        pumps = ['\1', '\2', '\3', '\4']

        ctr = 1
        pump_vol = {}
        stringed_ctr = str(ctr)
        for vol in range(100, 4100, 100):
            while stringed_ctr[-1] == '8' or stringed_ctr[-1] == '9':
                ctr += 1
                stringed_ctr = str(ctr)
            else:
                pump_vol[str(vol)] = ctr
                ctr += 1
                stringed_ctr = str(ctr)


        # add nice background
        background_image = visual.ImageStim(win=win, image = 'background_f.png')
        background_image.setAutoDraw(True)

        # response options
        left_resp = 'f'
        right_resp = 'k'

        # this works but make it nicer so it adds up files together in a nicer way
        def check_file(filename, cwd, ctr):
            for file in os.listdir(cwd):
                if file.endswith('.txt'):
                    if file != filename: # if a file doesnt exist just return the fname
                        return filename
                    else:
                        tmp = file.split('_')
                        tmp[1] = tmp[1] + '_' + str(ctr) # our new sub_id is now id_ctr
                        ctr += 1 # increment for recursivity
                        filename = '_'.join(tmp) # rename the file
                        check_file(filename, cwd, ctr)


        ################################################
        ########### effort #############################
        ################################################

        mvc = 95

        curr_contr = 0
        rew_multpl = 0

        ################################################
        ########### flanker ############################
        ################################################

        obtained_rew = 0

        base_rew = 0.10
        # flanker difficulty
        diff_lev = ['low', 'high']

        # cue timing denotes how long the flanker cues are presented
        cue_time = 0.3

        # resp window denotes the length of the response window
        resp_wind = 0.5

        vol = 1

        juice_rew = 'juice.png'
        pound_rew = 'pound.png'


        ###################################################
        ########## initial state determination ############
        ###################################################

        # variable for initial questions that determine a participants state
        initial_q = ''


        ################################################
        ################# juice evaluation #############
        ################################################

        juice_trial = 1
        run_dispenser = 1
        pump = ''
        tmp_val = 0
        # we preconfigure our container to be a list for each pump
        for el in pumps:
            jui = str(int(el.encode('hex'), 16))
            stor_jui_eval[jui] = []


        # just for debugging purposes
        run_debug = int(expInfo['run_debug'])




        ############################################################
        ################### file saving function ###################
        ############################################################

        def save_to_file(dataset, curr_reward, stor_ev, abs_trial, stor_eff, stor_main, stor_gust, types):
            trial_l = sorted([int(el) for el in stor_ev.keys()])
            str_abs_t = str(abs_trial)

            # we make types a list that denotes which of the 6 potential conditions it will be
            if type == types[0] or type == types[1]:

                for t in trial_l:
                    str_t = str(t)
                    dataset.write("{}\t{}\t{}\t{}\t{}\t{}\t{}\t{} \
                                {}\t{}\t{}\t{}\t{}\t{}\t{}\n".format(str_abs_t,                # abs_trial
                                                                     curr_reward,          # current reward type
                                                                     stor_ev[str_t][0],    # question
                                                                     stor_ev[str_t][1],     # response
                                                                     stor_ev[str_t][2],  # reaction time
                                                                     stor_eff[str_abs_t][0],     # trial contraction
                                                                     stor_eff[str_abs_t][1],     # reward multiplier | actual reward to be paid
                                                                     stor_main[str_abs_t][0],  # first stim
                                                                     stor_main[str_abs_t][1],  # go or no go
                                                                     stor_main[str_abs_t][2],  # response
                                                                     stor_main[str_abs_t][3],  # response rt
                                                                     stor_main[str_abs_t][4],  # reward
                                                                     stor_gust[str_abs_t][0],  # pump
                                                                     stor_gust[str_abs_t][1],  # times pumped
                                                                     stor_gust[str_abs_t][2]))  # amount
      Begin Routine:
        # Depending on 'type' that's put in, we manually construct the
        # experimental design matrix such that counterbalancing is achieved
        # the ugly psychopy output file that would be obtained through this
        # will then be discarded and a custom saving script will be used
        # it isn't necessary to have the complete matrix layout written out
        # in all cases, but I am doing it here for sake of completeness

        type = int(expInfo['type'])

        run_ev, run_effort, run_stroop, run_rew = 1, 1, 1, 1

        # run_ev, run_effort, run_stroop, run_rew
        # here run_rew can be defined as 1 in all conditions
        # because it will be changed during the task flow


        if type == 1:
            run_ev, run_effort, run_flanker, run_rew = 1, 1, 1, 1
        elif type == 2:
            run_ev, run_flanker, run_effort, run_rew = 1, 0, 0, 1
        elif type == 3:
            run_effort, run_ev, run_flanker, run_rew  = 1, 0, 0, 1
        elif type == 4:
            run_effort, run_flanker, run_ev, run_rew  = 1, 0, 0, 1
        elif type == 5:
            run_flanker, run_ev, run_effort, run_rew  = 1, 0, 0, 1
        elif type == 6:
            run_flanker, run_effort, run_ev, run_rew  = 1, 0, 0, 1

        # open datafile in the beginning
        exp_name = str(expName)
        sub_id = str(expInfo['participant'])
        dat = str(expInfo['date'])

        # number of practice trials | default is 20
        num_pract = int(expInfo['num_pract'])

        # connection is set at 1 as default, meaning we want to connect gustaf
        gust_connected = str(expInfo['g_conn'])

        # connection is set at 1 as default, meaning we want to connect the phys dev
        eff_connected = str(expInfo['ef_conn'])

        out_type = str(type) # we do this to avoid issues with reconverting type over and over


        pic_eval = int(expInfo['pic_eval'])

        if pic_eval == 1:
            run_pic_eval_b = 1
            run_pic_eval_e = 0
        else:
            run_pic_eval_b = 0
            run_pic_eval_e = 1



        # get current working directory
        cwd = os.getcwd()

        # filename
        fname = exp_name + '_' + sub_id + '_' + out_type  + dat + '.txt'

        complete = cwd + '\\data\\' + fname

        # handling if a file with that sub_id already exists

        ctr = 0 # recursively checks if the file already exists, if it doesn't it stops
        fname = check_file(fname, cwd, ctr)



        # open a text file
        dataset = open(complete, 'w')

        # in the first row we save header columns | add the others later

        dataset.write('trial\tcurr_rew\tquestion\tresponse\tresp_rt\ttrial_conc\trew_mult\tmain_st\tgng\tresp_m\tresp_m_rt\trew_m\tpump\tpump_tim\tpump_vol\n')

        # if we want to connect the gustatory device
        if gust_connected == 1:

            # set up gustaf connection

            timeout = 0
            params = {
                'timeout'  : timeout,
                'baudrate' : 19200,
                'bytesize' : serial.EIGHTBITS,
                'parity'   : serial.PARITY_NONE,
                'stopbits' : serial.STOPBITS_ONE,
            }

            dev = serial.Serial('COM3', **params)

            # Keep in mind there should be at least a 10ms difference
            # between changing amount of juice and the actual squirting
            # sequence itself.

            # safety feature to make sure port is open
            if(dev.isOpen() == False):
                dev.open()
    TextComponent text_7
      text = Instructions placeholder
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_9
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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  Routine eval_jui
    KeyboardComponent juice_resp
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5', '6'
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Begin Routine:
        # this is the question it randomly pulls from the .csv file
        curr_q = current_question

        # this is added because by having an id of the question
        # where the questions are randomised, we can simply store it
        # later
        q_id = sav_mapping
    TextComponent text_30
      wrapWidth = 0.8
      text [set every repeat] = $current_question
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent first_2
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.8, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent second_2
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.5, -0.6]
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent third_2
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.2, -0.6]
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fourth_2
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0.1, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fifth_2
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0.4, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent sixth_2
      fillColor = $[0.2, 0.2, 0.2]
      pos = (0.7, -0.6)
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    TextComponent text_31
      text = 1
      pos = [-0.8, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_32
      text = 2
      pos = [-0.5, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_33
      text = 3
      pos = [-0.2, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_34
      text = 4
      pos = [0.1, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_35
      text = 5
      pos = [0.4, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_22
      text = 6
      pos = [0.7, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine rew_ann
    CodeComponent code
      Begin Routine:
        if reward_type == 1:
            curr_reward = juice_rew
        else:
            curr_reward = pound_rew
      End Routine:
        # run_ev, run_effort, run_flanker
        if type == 2:
            run_ev, run_flanker, run_effort, run_rew = 1, 0, 0, 0
        elif type == 3:
            run_effort, run_ev, run_flanker, run_rew = 1, 0, 0, 0
            abs_trial += 1
        elif type == 4:
            abs_trial += 1
            run_effort, run_flanker, run_ev, run_rew = 1, 1, 0, 0
        elif type == 5:
            run_flanker, run_ev, run_effort, run_rew = 1, 0, 0, 0
            abs_trial += 1
        elif type == 6:
            run_flanker, run_effort, run_ev, run_rew = 1, 0, 0, 0
            abs_trial += 1
    TextComponent text_2
      text = Now, you will play for:
      stopVal [duration (s)] = 3
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image
      stopVal [duration (s)] = 3
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_reward
      size = (1, 1)
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  Routine tar_ann
    ImageComponent main_image
      stopVal [duration (s)] = $resp_wind
      startVal [time (s)] = 0.0
      image [set every repeat] = $main_cue
      size = (0.8, 0.3)
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    KeyboardComponent main_resp
      stopVal [duration (s)] = $resp_wind+resp_fin
      forceEndRoutine = True
      allowedKeys = 'f', 'k'
      startVal [time (s)] = $resp_wind
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  Routine phy_mvc
    TextComponent text_28
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        We will now ask you to give your best and try to
        squeeze the device in front of you as hard as possible.

        We want to see how strong you are!
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine iniq_feed
    CodeComponent code_16
      Begin Routine:
        if ev_resp.keys == '1':
            opt_1 = [1, 0.84, 0.0]
            opt_2, opt_3, opt_4, opt_5 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]
        elif ev_resp.keys == '2':
            opt_2 = [1, 0.84, 0.0]
            opt_1, opt_3, opt_4, opt_5 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]
        elif ev_resp.keys == '3':
            opt_3 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_4, opt_5 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]
        elif ev_resp.keys == '4':
            opt_4 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_3, opt_5 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]
        elif ev_resp.keys == '5':
            opt_5 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_3, opt_4 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]


        stor_ev[str(sub_trial)] = [q_id, int(ev_resp.keys), ev_resp.rt]
      End Routine:
        # run_ev, run_effort, run_stroop
        #if type == 1:
        #    abs_trial += 1
        if type == 2:
            run_ev, run_flanker, run_effort, run_rew = 0, 1, 0, 0
        elif type == 3:
            run_effort, run_ev, run_flanker, run_rew = 0, 0, 1, 0
        elif type == 4:
            run_effort, run_flanker, run_ev, run_rew = 0, 0, 0, 1

            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1


        elif type == 5:
            run_flanker, run_ev, run_effort, run_rew = 0, 0, 1, 0
        elif type == 6:
            run_flanker, run_effort, run_ev, run_rew = 0, 0, 0, 1

            run_prac = 0

            if abs_trial == num_pract:
                run_real = 1




        # for EV our data structure looks like this:
        # 'trial':[question_id, response, rt]


        sub_trial += 1
    TextComponent text_57
      text = 3
      stopVal [duration (s)] = 1.0
      pos = [0.0, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_58
      text = 4
      stopVal [duration (s)] = 1.0
      pos = [0.3, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_59
      text = 5
      stopVal [duration (s)] = 1.0
      pos = [0.6, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine comp
    CodeComponent code_6
      Begin Routine:
        if  main_resp.keys == left_resp:
            part_resp = 1 # left
        elif main_resp.keys == right_resp:
            part_resp = 2 # right
        else: # no go trial
            part_resp = 3

        # make sure this is correct
        # if participant does respond and was suppose to respond and responds correctly
        if part_resp == 1 and correct_response == 1 or \
            part_resp == 2 and correct_response == 2:
            computed_resp = 1 # hit

        # if participant does respond and was supposed to respond and responds incorrectly
        elif part_resp == 1 and correct_response == 2 or \
            part_resp == 2 and correct_response == 1:
            computed_resp = 2 # incorrect response due to pressing incorrect key

        # if participant does respond and was not supposed to respond
        elif (part_resp == 1 or part_resp == 2) and correct_response == 3:
            computed_resp = 3 # false alarm

        # if participant does not respond and was not supposed to respond
        elif part_resp == 3 and correct_response == 3:
            computed_resp = 0 # correct rejection

        # if participant does not respond and was supposed to respond
        elif part_resp == 3 and correct_response != 3:
            computed_resp = 4 # miss

        # remove this later
        act_pump, act_pump_nr, act_vol = 0, 0, 0
      End Routine:
        if gust_connected == 1:
            if current_rew == juice_rew and \
               computed_resp == 1 or computed_resp == 0:

                dev.write('\13')
                amount = str(int(pump_vol['2500']) * rew_multpl) # this needs to be changed obvs.
                dev.write(amount)

                dev.write('\1') # send juice squirt
                gus_fed = dev.readlines()

                obtained_rew = str(amount) + 'units of juice'

            elif current_rew == pound_rew and \
                computed_resp == 1 or computed_resp == 0:
                    obtained_rew = str(base_rew*rew_multpl) + 'pence'
            elif computed_resp == 2 or \
                 computed_resp == 3 or \
                 computed_resp == 4:
                    vol = 0
                    obtained_rew = 'nothing'

            if current_rew == juice_rew:
                # we parse the feedback - we can convert from hexadecimal here
                gus_fed = gus_fed[0]
                if len(gus_fed) == 3: # we know that if the length is 3 then it sent extra information
                    act_pump = gus_fed[0] # because the default setting is to send information on 1ml
                    act_pump_nr = gus_fed[1]
                    act_vol = int(gustaf_feedback[2].encode('hex'), 16)*1000
                else:
                    act_pump = gus_fed[0]
                    act_pump_nr = gus_fed[1]
                    act_vol = 1000
            else:
                act_pump, act_pump_nr, act_vol = 0, 0, 0


        # save data on a per trial basis
        str_abs_t = str(abs_trial)

        stor_main[str_abs_t] = [cue, cond, computed_resp, main_resp.rt, obtained_rew]
        stor_gust[str_abs_t] = [act_pump, act_pump_nr, act_vol]


        save_to_file(dataset, curr_reward, stor_ev, abs_trial, stor_eff, stor_main, stor_gust, [1, 3])

        # run_ev, run_effort, run_flanker
        if type == 1:
            abs_trial += 1
            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1

        if type == 2:
            run_ev, run_effort, run_flanker, run_rew = 0, 1, 0, 0
        elif type == 3:
            run_effort, run_ev, run_flanker, run_rew = 0, 0, 0, 1

            abs_trial += 1
            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1

        elif type == 4:
            run_effort, run_flanker, run_ev, run_rew = 0, 0, 1, 0
        elif type == 5:
            run_flanker, run_ev, run_effort, run_rew = 0, 1, 0, 0
        elif type == 6:
            run_flanker, run_effort, run_ev, run_rew = 0, 1, 0, 0
  Routine est_sal
    TextComponent text_24
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You will now get to try a number of juices.
        After you obtain each juice, we would like you
        to rate them. We will take your answers into
        account so you will be playing for your
        favourite juice!
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_29
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine short_feed
    PolygonComponent polygon
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.5, 0.5)
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  Routine jui_out
    CodeComponent code_8
      Begin Routine:
        summed = []
        for key, values in zip(stor_jui_eval.keys(), stor_jui_eval.values()):
            tmp_val = 0
            for value in values:
                tmp_val += value
            summed.append((key, tmp_val/3)) # because we ask them 3 questions

        # should automatically pick a random element
        fav_juice = max(summed, key=lambda item:item[1])[0] # take the first element
    TextComponent text_41
      text = You choose:
      stopVal [duration (s)] = 1.0
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_45
      text [set every repeat] = $fav_juice
      stopVal [duration (s)] = 1.0
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ini_q
    KeyboardComponent instr1_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_42
      text = We would first like to ask you a few questions. 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_43
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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  Routine eff_prom
    TextComponent text_23
      text = Now comes the squeeze game!
      stopVal [duration (s)] = 1.0
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine beg_fix
    CodeComponent code_5
      Begin Routine:
        curr_t = min(2.5, max(0.5, random.gauss(2, 0.1)))
        main_cue = cue
        curr_diff_lev = diff_lev[0]

        if curr_diff_lev == 'low':
            cue_timing = 0.4
            resp_wind = 0.6
            feed_sound = 'lowest.wav'
        elif curr_diff_lev == 'high':
            cue_timing = 0.2
            resp_wind =  0.4
            feed_sound = 'highest.wav'
        else:
            cue_timing = 0.3
            resp_wind = 0.5
            feed_sound = 'medium.wav'

        resp_fin = 5
    TextComponent text
      text = +
      stopVal [duration (s)] = $curr_t
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine eval_iniq
    CodeComponent code_14
      Begin Routine:
        # this is the question it randomly pulls from the .csv file
        initial_q = current_question

        # this is added because by having an id of the question
        # where the questions are randomised, we can simply store it
        # later
        q_id = sav_mapping
      End Routine:
        stor_init_q.append(rating.getRating())
    RatingScaleComponent rating
      labels = not at all, extremely
      pos = 0, -0.4
      high = 100
      startVal [time (s)] = 0.0
      size = 1.6
      storeRatingTime = False
      forceEndRoutine = True
      low = 0
      visualAnalogScale = True
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    TextComponent text_44
      text [set every repeat] = $initial_q
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine tar_feed
    TextComponent text_3
      text = You have obtained
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_6
      text [set every repeat] = $obtained_rew
      stopVal [duration (s)] = 1.0
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_15
  Routine jui_feed
    CodeComponent code_12
      Begin Routine:
        if juice_resp.keys == '1':
            opt_1 = [1, 0.84, 0.0]
            opt_2, opt_3, opt_4, opt_5, opt_6 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]

        elif juice_resp.keys == '2':
            opt_2 = [1, 0.84, 0.0]
            opt_1, opt_3, opt_4, opt_5, opt_6 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]

        elif juice_resp.keys == '3':
            opt_3 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_4, opt_5, opt_6 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]

        elif juice_resp.keys == '4':
            opt_4 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_3, opt_5, opt_6 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]

        elif juice_resp.keys == '5':
            opt_5 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_3, opt_4, opt_6 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]

        elif juice_resp.keys == '6':
            opt_6 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_3, opt_4, opt_5 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]

        # current pump
        jui = str(int(pump.encode('hex'), 16))[-1]
        stor_jui_eval[jui].append(int(juice_resp.keys))

        if juice_trial == 1:
            run_dispenser = 0

        juice_trial += 1

        if juice_trial == 4:
            run_dispenser = 1
            juice_trial = 1
      End Routine:
        #act_vol = int(pump.encode('hex'), 16)

        # water
        #dev.write()
    PolygonComponent first_feedback_2
      fillColor [set every repeat] = $opt_1
      stopVal [duration (s)] = 0.5
      pos = [-0.8, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent second_feedback_2
      fillColor [set every repeat] = $opt_2
      stopVal [duration (s)] = 0.5
      pos = [-0.5, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent third_feedback_2
      fillColor [set every repeat] = $opt_3
      stopVal [duration (s)] = 0.5
      pos = [-0.2, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fourth_feedback_2
      fillColor [set every repeat] = $opt_4
      stopVal [duration (s)] = 0.5
      pos = [0.1, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fifth_feedback_2
      fillColor [set every repeat] = $opt_5
      stopVal [duration (s)] = 0.5
      pos = [0.4, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent sixth_feedback_2
      fillColor [set every repeat] = $opt_6
      stopVal [duration (s)] = 0.5
      pos = (0.7, -0.6)
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    TextComponent text_36
      text = 1
      stopVal [duration (s)] = 0.5
      pos = [-0.8, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_37
      text = 2
      stopVal [duration (s)] = 0.5
      pos = [-0.5, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_38
      text = 3
      stopVal [duration (s)] = 0.5
      pos = [-0.2, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_39
      text = 4
      stopVal [duration (s)] = 0.5
      pos = [0.1, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_40
      text = 5
      stopVal [duration (s)] = 0.5
      pos [set every frame] = [0.4, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_25
      text = 6
      stopVal [duration (s)] = 0.5
      pos = (0.7, -0.58)
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine juice_eval
    CodeComponent code_18
      Each Frame:
        tmp_key = juice_valuation.keys


        response += tmp_key
    TextComponent text_48
      text = How much do you think 100ml of juice is worth?
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent juice_valuation
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'all'
      startVal [time (s)] = 0.0
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    TextComponent text_50
      text [set every frame] = $response
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ev_prom
    KeyboardComponent ev_resp
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5', '6'
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Begin Routine:
        # this is the question it randomly pulls from the .csv file
        curr_q = current_question

        # this is added because by having an id of the question
        # where the questions are randomised, we can simply store it
        # later
        q_id = sav_mapping
    TextComponent text_5
      wrapWidth = 0.8
      text [set every repeat] = $current_question
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent first
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.8, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent second
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.5, -0.6]
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent third
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.2, -0.6]
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fourth
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0.1, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent fifth
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0.4, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    PolygonComponent sixth
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0.7, -0.6]
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      size = (0.25, 0.3)
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    TextComponent text_12
      text = 1
      pos = [-0.8, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_13
      text = 2
      pos = [-0.5, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_14
      text = 3
      pos = [-0.2, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_15
      text = 4
      pos = [0.1, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_16
      text = 5
      pos = [0.4, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_47
      text = 6
      pos = [0.7, -0.58]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine jui_inf
  Routine main_feed
    PolygonComponent feed_info
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.1
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.1, 0.1)
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  Routine real_ann
    PolygonComponent background_poly3
      opacity = 0.5
      fillColor = $[1,1,1]
      lineColor = $[-1, -1, -1]
      startVal [time (s)] = 0.0
      size = (0.8, 1.8)
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    TextComponent text_26
      text = Now the game begins!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_27
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine eff_tas
    TextComponent text_11
      text = Effort task placeholder
      stopVal [duration (s)] = 1.0
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_9
      Begin Routine:
        # let's say we store participant data here.
        # cur_contr - we would get this information back from the dynamometer
        # mvc - denotes the maximal values we would get back from the dynamometer

        curr_contr_perc = int((curr_contr - mvc)/100)*100

        if curr_contr_perc >= 80:
            rew_multpl = 1.2
        elif 50 <= curr_contr_perc <= 79:
            rew_multpl = 1
        elif 25 <= curr_contr_perc <= 50:
            rew_multpl = 0.8
      End Routine:
        # save data on a per trial basis
        stor_eff[str(abs_trial)] = [curr_contr, rew_multpl]


        # run_ev, run_effort, run_stroop
        if type == 2:
            run_ev, run_flanker, run_effort, run_rew = 0, 0, 0, 1

            abs_trial += 1
            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1

        elif type == 3:
            run_prac = 0 # this needs to be here in order to prevent
                         # it from popping up unnecessarily
            run_effort, run_ev, run_flanker, run_rew = 0, 1, 0, 0
        elif type == 4:
            run_effort, run_flanker, run_ev, run_rew = 0, 1, 0, 0
        elif type == 5:
            run_flanker, run_ev, run_effort, run_rew = 0, 0, 0, 1

            abs_trial += 1
            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1

        elif type == 6:
            run_flanker, run_effort, run_ev, run_rew = 0, 0, 1, 0

        # here we would get the response from an individual in terms of
        # the exerted effort. the question is now if this will be
        # dynamic or just a static value in the end

        # we will make it such that the data on the ev will be automatically repeated
        # the good thing about that is that it will be very easy to analyse in both python and r

        save_to_file(dataset, curr_reward, stor_ev, abs_trial, stor_eff, stor_main, stor_gust, [2, 5])
Flow
  Routine instr1
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = $run_debug
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    Routine ini_q
    LoopInitiator init_qs loopType="TrialHandler"
      conditionsFile = initial_q.csv
      loopType = random
      nReps = 1
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      Routine eval_iniq
    LoopTerminator init_qs
    LoopInitiator trial_pic_eval loopType="TrialHandler"
      conditionsFile = pic_rating.csv
      loopType = random
      nReps = $run_pic_eval_b
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      Routine eval_pic
    LoopTerminator trial_pic_eval
    Routine est_sal
    LoopInitiator juice_types loopType="TrialHandler"
      conditionsFile = juice_types.csv
      loopType = random
      nReps = 1
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      LoopInitiator juice_salience loopType="TrialHandler"
        conditionsFile = juice_salience.csv
        loopType = random
        nReps = 1
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        LoopInitiator dispenser loopType="TrialHandler"
          loopType = random
          nReps = $run_dispenser
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          Routine supl_jui
        LoopTerminator dispenser
        Routine eval_jui
        Routine jui_feed
      LoopTerminator juice_salience
    LoopTerminator juice_types
    Routine jui_out
    Routine phy_mvc
  LoopTerminator trials
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = main_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': u'A', 'reward_type': 1, 'target': u'X'},
      {'cue': u'A', 'reward_type': 2, 'target': u'X'},
      {'cue': u'A', 'reward_type': 1, 'target': u'Y'},
      {'cue': u'A', 'reward_type': 1, 'target': u'Y'},
      {'cue': u'B', 'reward_type': 2, 'target': u'Y'},
      {'cue': u'B', 'reward_type': 2, 'target': u'X'},
      {'cue': u'A', 'reward_type': 1, 'target': u'X'},
      {'cue': u'B', 'reward_type': 2, 'target': u'X'},
      {'cue': u'A', 'reward_type': 1, 'target': u'Y'}]
    LoopInitiator prac_info loopType="TrialHandler"
      loopType = random
      nReps = $run_prac
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      Routine prac_ann
    LoopTerminator prac_info
    LoopInitiator real_info loopType="TrialHandler"
      loopType = random
      nReps = $run_real
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      Routine real_ann
    LoopTerminator real_info
    LoopInitiator rew_role loopType="TrialHandler"
      loopType = random
      nReps = run_rew
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      Routine iti
      Routine rew_ann
    LoopTerminator rew_role
    LoopInitiator exp_loop loopType="TrialHandler"
      conditionsFile = flanker_trials.csv
      loopType = random
      nReps = 1
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      LoopInitiator ev_role loopType="TrialHandler"
        loopType = random
        nReps = run_ev
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        Routine iti
        LoopInitiator ev_loop loopType="TrialHandler"
          conditionsFile = ev.csv
          loopType = random
          nReps = 1
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          conditions:
            [{'current_question': u'firstq'},
            {'current_question': u'secondq'},
            {'current_question': u'thirdq'},
            {'current_question': u'fourthq'}]
          Routine ev_prom
          Routine ev_feed
        LoopTerminator ev_loop
        Routine ev_save
      LoopTerminator ev_role
      LoopInitiator effort_role loopType="TrialHandler"
        loopType = random
        nReps = run_effort
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        Routine eff_prom
        Routine iti
        LoopInitiator cb_loop3 loopType="TrialHandler"
          loopType = random
          nReps = 5
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          Routine eff_tas
        LoopTerminator cb_loop3
      LoopTerminator effort_role
      LoopInitiator flanker_role loopType="TrialHandler"
        loopType = random
        nReps = run_flanker
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        Routine beg_fix
        Routine tar_ann
        Routine main_feed
        Routine comp
        Routine tar_feed
      LoopTerminator flanker_role
    LoopTerminator exp_loop
  LoopTerminator main_loop
  Routine juice_eval
  LoopInitiator trial_pic_eval_2 loopType="TrialHandler"
    conditionsFile = pic_rating.csv
    loopType = random
    nReps = $run_pic_eval_e
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    Routine eval_pic
  LoopTerminator trial_pic_eval_2
